PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Completed URL = https://app.prolific.com/submissions/complete?cc=CE8VG5D0
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = -1.0000, -1.0000, -1.0000
  expName = psychopy project
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent face_img
      image [set every repeat] = $face
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ImageComponent object_img
      image [set every repeat] = $object
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.2
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    ImageComponent mask
      image = stimuli/Mask.bmp
      size = (0.5, 0.5)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp
      allowedKeys = 'q','p'
      forceEndRoutine = True
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.5
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    KeyboardComponent too_slow_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.9
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    TextComponent too_slow_text
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.9
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      text:
        Please respond more quickly!

        Press SPACE to continue.
  Routine welcome
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    TextComponent welcome_msg
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This experiment will take approximately 15 minutes to complete. This task is investigating object recognition under distracting conditions.
        You will be asked to quickly identify objects while being distracted by other stimuli.

        Please press SPACE when you are ready to begin.
    KeyboardComponent intro_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine press_space
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    KeyboardComponent press_space_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent press_space_remember
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Q: TOY           REMEMBER!           P:GUN




        Press SPACE to continue.
  Routine trial_face
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    ImageComponent face
      image [set every repeat] = face
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine picture_loader
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    CodeComponent code
      Code Type = Auto->JS
  Routine trial2
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  Routine practice_trial
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    ImageComponent face_img_practice
      image [set every repeat] = $face
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ImageComponent object_img_practice
      image [set every repeat] = $object
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.2
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    ImageComponent mask_practice
      image = stimuli/Mask.bmp
      size = (0.5, 0.5)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_pract
      allowedKeys = 'q','p'
      forceEndRoutine = True
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.5
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    KeyboardComponent too_slow_practice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.9
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    TextComponent too_slow_text_practice
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.9
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      text:
        Please respond more quickly!

        Press SPACE to continue.
  Routine end
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        This study examines the effect of facial priming with categorization of threatening and nonthreatening objects. Please do not to share this information with any other potential participants.

        Thank you for your participation!
        Press SPACE to exit.
    KeyboardComponent space_to_exit
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine transition
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    TextComponent transition_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Well done!

        Now we will begin with the actual trials. Feel free to take breaks in between trials if you want. If you do not take breaks, the whole experiment should take around 10 minutes.

        Good luck!

        Press SPACE to continue.
    KeyboardComponent press_space_cont_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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  Routine ethnicity_check
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    TextComponent text_ethnicity_check
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Before we finalize, we would like to know some additional information about you. This information will NOT affect your payment through Prolific.

        Do you identify as Hispanic or Latinx?

        Y: YES
        N: NO
    KeyboardComponent key_resp_ethnicity
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine race_check
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    TextComponent text_race_check
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        How would you describe your race?

        W: White or Caucasian
        B: Black or African American
        N: American Indian or Alaska Native
        A: Asian
        P: Native Hawaiian or Other Pacific Islander
        O: Other or Mixed
    KeyboardComponent key_resp_race_check
      allowedKeys = 'w', 'b', 'n', 'a', 'p', 'o'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent
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    TextComponent text_consent
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        By answering the following questions, you are participating in a study being performed by cognitive scientists in the Stanford Department of Psychology. If you have questions about this research, please contact us at stanfordpsych251@gmail.com. You must be at least 18 years old to participate. Your participation in this research is voluntary. You may decline to answer any or all of the following questions. You may decline further participation, at any time, without adverse consequences. Your anonymity is assured; the researchers who have requested your participation will not receive any personal information about you.

        Press SPACE to accept these conditions and continue to the experiment.
    KeyboardComponent press_space_consent
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine halfway
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    TextComponent text_halfway
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are halfway through the experiment!

        Feel free to take a short break if you want.

        Press SPACE when you are ready to continue.
    KeyboardComponent key_halfway
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine instruction1
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    TextComponent instruction_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this study, you will see pairs of pictures flashed briefly on the screen.
        You should do nothing in response to the first picture, which will always be a face. This face will signal that the second picture is about to be presented.

        Your task is to classify the second picture as either a gun or a toy.

        If the second picture is a gun, press Q.
        If the target picture is a toy, press P.

        After each trial, you will be asked to press the space bar to proceed.

        Press SPACE to continue with the instructions.
    KeyboardComponent instruction_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine instruction2
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    TextComponent text_intruction2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You have to respond as quickly and accurately as you can. If you make a mistake, don't worry. Just keep going to the next trial.

        If you take too long to respond, you will see this message:
        "Please respond faster!"

        If you see this message, please try to press the keys faster.

        Press SPACE to continue with instructions
    KeyboardComponent instruction2_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine practice_ready
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    TextComponent text_practice_ready
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        The first round of pictures will be a series of practice trials.

        Please place your fingers over the "Q" (TOY) and "P" (GUN) keys on the keyboard so that you are ready to register your responses.

        Please click SPACE when you are ready to begin the practice trials.
    KeyboardComponent practice_ready_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine consent
  Routine instruction1
  Routine instruction2
  Routine practice_ready
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = loop3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'face': 'stimuli/b01.bmp', 'object': 'stimuli/g1.bmp'},
      {'face': 'stimuli/b01.bmp', 'object': 'stimuli/g2.bmp'},
      {'face': 'stimuli/b01.bmp', 'object': 'stimuli/t1.bmp'},
      {'face': 'stimuli/b01.bmp', 'object': 'stimuli/t2.bmp'},
      {'face': 'stimuli/w01.bmp', 'object': 'stimuli/t1.bmp'},
      {'face': 'stimuli/w01.bmp', 'object': 'stimuli/t2.bmp'},
      {'face': 'stimuli/w01.bmp', 'object': 'stimuli/g1.bmp'},
      {'face': 'stimuli/w01.bmp', 'object': 'stimuli/g2.bmp'},
      {'face': None, 'object': None},
      {'face': None, 'object': None},
      {'face': None, 'object': None},
      {'face': None, 'object': None}]
    Routine press_space
    Routine practice_trial
  LoopTerminator practice_trials
  Routine transition
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:72
    conditionsFile = loop2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'face': 'stimuli/b03.bmp', 'object': 'stimuli/t1.bmp'},
      {'face': 'stimuli/b02.bmp', 'object': 'stimuli/g2.bmp'},
      {'face': 'stimuli/b05.bmp', 'object': 'stimuli/g6.bmp'},
      {'face': 'stimuli/w01.bmp', 'object': 'stimuli/t2.bmp'},
      {'face': 'stimuli/b05.bmp', 'object': 'stimuli/t1.bmp'},
      {'face': 'stimuli/w01.bmp', 'object': 'stimuli/g6.bmp'},
      {'face': 'stimuli/b02.bmp', 'object': 'stimuli/g3.bmp'},
      {'face': 'stimuli/w02.bmp', 'object': 'stimuli/g6.bmp'},
      {'face': 'stimuli/w04.bmp', 'object': 'stimuli/g3.bmp'},
      {'face': 'stimuli/b06.bmp', 'object': 'stimuli/t6.bmp'},
      {'face': 'stimuli/b02.bmp', 'object': 'stimuli/t3.bmp'},
      {'face': 'stimuli/b05.bmp', 'object': 'stimuli/t3.bmp'},
      {'face': 'stimuli/b04.bmp', 'object': 'stimuli/t2.bmp'},
      {'face': 'stimuli/w05.bmp', 'object': 'stimuli/t2.bmp'},
      {'face': 'stimuli/w02.bmp', 'object': 'stimuli/t1.bmp'},
      {'face': 'stimuli/b01.bmp', 'object': 'stimuli/g5.bmp'},
      {'face': 'stimuli/b04.bmp', 'object': 'stimuli/g4.bmp'},
      {'face': 'stimuli/b04.bmp', 'object': 'stimuli/g6.bmp'},
      {'face': 'stimuli/w02.bmp', 'object': 'stimuli/t2.bmp'},
      {'face': 'stimuli/w06.bmp', 'object': 'stimuli/g4.bmp'},
      {'face': 'stimuli/b03.bmp', 'object': 'stimuli/t5.bmp'},
      {'face': 'stimuli/w03.bmp', 'object': 'stimuli/t3.bmp'},
      {'face': 'stimuli/w02.bmp', 'object': 'stimuli/g2.bmp'},
      {'face': 'stimuli/w04.bmp', 'object': 'stimuli/t1.bmp'},
      {'face': 'stimuli/b02.bmp', 'object': 'stimuli/t2.bmp'},
      {'face': 'stimuli/b02.bmp', 'object': 'stimuli/g6.bmp'},
      {'face': 'stimuli/w02.bmp', 'object': 'stimuli/g1.bmp'}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
    Routine press_space
    Routine trial
  LoopTerminator trials
  Routine halfway
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 73:144
    conditionsFile = loop2.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine press_space
    Routine trial
  LoopTerminator trials_2
  Routine ethnicity_check
  Routine race_check
  Routine end
